<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.6.2"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:gl="clr-namespace:Bonsai.Shaders;assembly=Bonsai.Shaders"
                 xmlns:res="clr-namespace:Bonsai.Resources;assembly=Bonsai.System"
                 xmlns:num="clr-namespace:Bonsai.Numerics;assembly=Bonsai.Numerics"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:io="clr-namespace:Bonsai.IO;assembly=Bonsai.System"
                 xmlns:scr="clr-namespace:Bonsai.Scripting;assembly=Bonsai.Scripting"
                 xmlns:gli="clr-namespace:Bonsai.Shaders.Input;assembly=Bonsai.Shaders"
                 xmlns:mx="clr-namespace:Bonsai.DAQmx;assembly=Bonsai.DAQmx"
                 xmlns:dsp="clr-namespace:Bonsai.Dsp;assembly=Bonsai.Dsp"
                 xmlns:p1="clr-namespace:Bonsai.Spinnaker;assembly=Bonsai.Spinnaker"
                 xmlns:cv="clr-namespace:Bonsai.Vision;assembly=Bonsai.Vision"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:CreateWindow">
          <gl:Width>640</gl:Width>
          <gl:Height>480</gl:Height>
          <gl:VSync>On</gl:VSync>
          <gl:SwapSync>false</gl:SwapSync>
          <gl:ClearColor>Gray</gl:ClearColor>
          <gl:ClearMask>DepthBufferBit ColorBufferBit</gl:ClearMask>
          <gl:CursorVisible>true</gl:CursorVisible>
          <gl:Location xsi:nil="true" />
          <gl:WindowBorder>Resizable</gl:WindowBorder>
          <gl:WindowState>Normal</gl:WindowState>
          <gl:DisplayDevice>Primary</gl:DisplayDevice>
          <gl:TargetRenderFrequency>60</gl:TargetRenderFrequency>
          <gl:TargetUpdateFrequency xsi:nil="true" />
          <gl:RenderState />
          <gl:GraphicsMode>
            <gl:ColorFormat>
              <gl:Red>8</gl:Red>
              <gl:Green>8</gl:Green>
              <gl:Blue>8</gl:Blue>
              <gl:Alpha>8</gl:Alpha>
            </gl:ColorFormat>
            <gl:Depth>16</gl:Depth>
            <gl:Stencil>0</gl:Stencil>
            <gl:Samples>0</gl:Samples>
            <gl:AccumulatorFormat>
              <gl:Red>0</gl:Red>
              <gl:Green>0</gl:Green>
              <gl:Blue>0</gl:Blue>
              <gl:Alpha>0</gl:Alpha>
            </gl:AccumulatorFormat>
            <gl:Buffers>2</gl:Buffers>
            <gl:Stereo>false</gl:Stereo>
          </gl:GraphicsMode>
        </Combinator>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.BonVisionResources.bonsai" />
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="res:LoadResources" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:RenderFrame" />
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.OrthographicView.bonsai">
        <Left>15</Left>
        <Right>110</Right>
        <Bottom>-45</Bottom>
        <Top>45</Top>
      </Expression>
      <Expression xsi:type="BehaviorSubject">
        <Name>drawStim</Name>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.NormalizedView.bonsai" />
      <Expression xsi:type="BehaviorSubject">
        <Name>Quad</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="num:CreateRandom">
          <num:Seed xsi:nil="true" />
        </Combinator>
      </Expression>
      <Expression xsi:type="BehaviorSubject">
        <Name>rand</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Quad</Name>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.DrawQuad.bonsai">
        <ExtentX>0.1</ExtentX>
        <ExtentY>0.1</ExtentY>
        <LocationX>-1</LocationX>
        <LocationY>-1</LocationY>
        <Layer>0</Layer>
        <Angle>0</Angle>
        <ColorR>1</ColorR>
        <ColorG>1</ColorG>
        <ColorB>1</ColorB>
        <ColorA>1</ColorA>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>drawStim</Name>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.DrawQuad.bonsai">
        <ExtentX>1</ExtentX>
        <ExtentY>1</ExtentY>
        <LocationX>0</LocationX>
        <LocationY>0</LocationY>
        <Layer>0</Layer>
        <Angle>0</Angle>
        <ColorR>1</ColorR>
        <ColorG>1</ColorG>
        <ColorB>1</ColorB>
        <ColorA>0</ColorA>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:Timer">
          <gl:DueTime>PT5S</gl:DueTime>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:TakeUntil" />
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Workflow>
          <Nodes>
            <Expression xsi:type="io:CsvReader">
              <io:FileName>csvSample.csv</io:FileName>
              <io:ListSeparator>,</io:ListSeparator>
              <io:SkipRows>1</io:SkipRows>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>rand</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="num:Permutation" />
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Expression>new(Single.Parse(it[0]) as Item1,
Single.Parse(it[1]) as Item2,
Single.Parse(it[2]) as Item3,
Single.Parse(it[3]) as Item4,
TimeSpan.FromSeconds(Double.Parse(it[4])) as dueTime
)</scr:Expression>
            </Expression>
            <Expression xsi:type="CreateObservable">
              <Name>Circle group</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>drawStim</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="LocationX" Selector="Item1" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="LocationY" Selector="Item2" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="Diameter" Selector="Item3" />
                      <Property Name="ColorR" Selector="Item4" />
                      <Property Name="ColorG" Selector="Item4" />
                      <Property Name="ColorB" Selector="Item4" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.DrawCircle.bonsai">
                    <LocationX>35</LocationX>
                    <LocationY>15</LocationY>
                    <Layer>0</Layer>
                    <Diameter>0.5</Diameter>
                    <ColorR>1</ColorR>
                    <ColorG>1</ColorG>
                    <ColorB>1</ColorB>
                    <ColorA>1</ColorA>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="DueTime" Selector="dueTime" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="gl:Timer">
                      <gl:DueTime>PT0.2S</gl:DueTime>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:TakeUntil" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="gl:Delay">
                      <gl:DueTime>PT0.5S</gl:DueTime>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="gl:Timer">
                      <gl:DueTime>PT0.2S</gl:DueTime>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>Quad</Name>
                  </Expression>
                  <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.DrawQuad.bonsai">
                    <ExtentX>0.1</ExtentX>
                    <ExtentY>0.1</ExtentY>
                    <LocationX>-1</LocationX>
                    <LocationY>-1</LocationY>
                    <Layer>1</Layer>
                    <Angle>0</Angle>
                    <ColorR>0</ColorR>
                    <ColorG>0</ColorG>
                    <ColorB>0</ColorB>
                    <ColorA>1</ColorA>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:TakeUntil" />
                  </Expression>
                </Nodes>
                <Edges>
                  <Edge From="0" To="5" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="1" To="3" Label="Source1" />
                  <Edge From="1" To="4" Label="Source1" />
                  <Edge From="1" To="6" Label="Source1" />
                  <Edge From="2" To="5" Label="Source2" />
                  <Edge From="3" To="5" Label="Source3" />
                  <Edge From="4" To="5" Label="Source4" />
                  <Edge From="5" To="8" Label="Source1" />
                  <Edge From="6" To="7" Label="Source1" />
                  <Edge From="6" To="11" Label="Source1" />
                  <Edge From="7" To="8" Label="Source2" />
                  <Edge From="8" To="9" Label="Source1" />
                  <Edge From="9" To="10" Label="Source1" />
                  <Edge From="11" To="14" Label="Source2" />
                  <Edge From="12" To="13" Label="Source1" />
                  <Edge From="13" To="14" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Concat" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:RepeatCount">
                <rx:Count>5</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="2" Label="Source1" />
            <Edge From="1" To="2" Label="Source2" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source2" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Concat" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gli:KeyDown">
          <gli:Key>Q</gli:Key>
          <gli:Modifiers>Control</gli:Modifiers>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Take">
          <rx:Count>1</rx:Count>
        </Combinator>
      </Expression>
      <Expression xsi:type="WorkflowOutput" />
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="mx:AnalogInput">
          <mx:SignalSource />
          <mx:SampleRate>1000</mx:SampleRate>
          <mx:ActiveEdge>Rising</mx:ActiveEdge>
          <mx:SampleMode>ContinuousSamples</mx:SampleMode>
          <mx:BufferSize>1000</mx:BufferSize>
          <mx:SamplesPerRead>-1</mx:SamplesPerRead>
          <mx:Channels>
            <mx:AnalogInputChannelConfiguration>
              <mx:ChannelName>Bla</mx:ChannelName>
              <mx:MinimumValue>-10</mx:MinimumValue>
              <mx:MaximumValue>10</mx:MaximumValue>
              <mx:PhysicalChannel>Dev1/ai0</mx:PhysicalChannel>
              <mx:TerminalConfiguration>Differential</mx:TerminalConfiguration>
              <mx:VoltageUnits>Volts</mx:VoltageUnits>
            </mx:AnalogInputChannelConfiguration>
          </mx:Channels>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="dsp:MatrixWriter">
          <dsp:Path>Data.bin</dsp:Path>
          <dsp:Suffix>None</dsp:Suffix>
          <dsp:Overwrite>false</dsp:Overwrite>
          <dsp:Layout>ColumnMajor</dsp:Layout>
        </Combinator>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="p1:SpinnakerCapture">
            <p1:Index xsi:nil="true" />
            <p1:ColorProcessing>Default</p1:ColorProcessing>
          </Combinator>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="cv:VideoWriter">
            <cv:FileName>video.avi</cv:FileName>
            <cv:Suffix>None</cv:Suffix>
            <cv:Buffered>true</cv:Buffered>
            <cv:Overwrite>false</cv:Overwrite>
            <cv:FourCC>FMP4</cv:FourCC>
            <cv:FrameRate>30</cv:FrameRate>
            <cv:FrameSize>
              <cv:Width>0</cv:Width>
              <cv:Height>0</cv:Height>
            </cv:FrameSize>
            <cv:ResizeInterpolation>NearestNeighbor</cv:ResizeInterpolation>
          </Combinator>
        </Builder>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="3" To="6" Label="Source1" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="8" To="9" Label="Source1" />
      <Edge From="10" To="11" Label="Source1" />
      <Edge From="12" To="13" Label="Source1" />
      <Edge From="13" To="15" Label="Source1" />
      <Edge From="14" To="15" Label="Source2" />
      <Edge From="15" To="17" Label="Source1" />
      <Edge From="16" To="17" Label="Source2" />
      <Edge From="18" To="19" Label="Source1" />
      <Edge From="19" To="20" Label="Source1" />
      <Edge From="21" To="22" Label="Source1" />
      <Edge From="23" To="24" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>